# Generated by Configurator on Wed Oct 09 16:05:06 CEST 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,PyHub,PyDevice,PyHub
Device,camera,PyDevice,Camera:camera
Device,algorithm,PyDevice,Device:algorithm
Device,stage,PyDevice,XYStage:stage

# Pre-init settings for devices
Property,PyHub,PythonEnvironment,(auto)
Property,PyHub,ScriptPath,./micro_wfs_demo.py

# Pre-init settings for COM ports

# Hub (parent) references
Parent,camera,PyHub
Parent,algorithm,PyHub
Parent,stage,PyHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,camera
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

