# Generated by Configurator on Wed Jun 12 19:51:35 CEST 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,PyHub,PyDevice,PyHub
Device,Camera:microscope,PyDevice,Camera:microscope

# Pre-init settings for devices
Property,PyHub,PythonEnvironment,(auto)
Property,PyHub,ScriptPath,C:/git/openwfs/examples/mm_scanning_microscope.py

# Pre-init settings for COM ports

# Hub (parent) references
Parent,Camera:microscope,PyHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Camera:microscope
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

